CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:5
HasImagePlaneDetails:False

LoadData:[module_num:1|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Input data file location:Default Input Folder sub-folder|Interstellar_Project/0.wave1_data/1.cellprofiler_ic_processing
    Name of the file:wave1.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
    Rows to process:1,100000
    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
    Dilation radius:1
    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
    Method to calculate smoothing filter size:Automatic
    Approximate object diameter:10
    Smoothing filter size:10
    Retain the averaged image?:No
    Name the averaged image:IllumBlueAvg
    Retain the dilated image?:No
    Name the dilated image:IllumBlueDilated
    Automatically calculate spline parameters?:Yes
    Background mode:auto
    Number of spline points:5
    Background threshold:2.0
    Image resampling factor:2.0
    Maximum number of iterations:40
    Residual value for convergence:0.001

CorrectIlluminationCalculate:[module_num:3|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OrigGasderminD
    Name the output image:IllumGasderminD
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
    Dilation radius:1
    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
    Method to calculate smoothing filter size:Automatic
    Approximate object diameter:10
    Smoothing filter size:10
    Retain the averaged image?:No
    Name the averaged image:IllumBlueAvg
    Retain the dilated image?:No
    Name the dilated image:IllumBlueDilated
    Automatically calculate spline parameters?:Yes
    Background mode:auto
    Number of spline points:5
    Background threshold:2.0
    Image resampling factor:2.0
    Maximum number of iterations:40
    Residual value for convergence:0.001

SaveImages:[module_num:4|svn_version:'Unknown'|variable_revision_number:16|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:IllumDNA
    Select method for constructing file names:Single name
    Select image name for file prefix:None
    Enter single file name:\g<Plate>_IllumDNA
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:IllumDNA
    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Interstellar_Project/0.wave1_data/1.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)
    Save with lossless compression?:Yes

SaveImages:[module_num:5|svn_version:'Unknown'|variable_revision_number:16|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:IllumGasderminD
    Select method for constructing file names:Single name
    Select image name for file prefix:None
    Enter single file name:\g<Plate>_IllumGasderminD
    Number of digits:4
    Append a suffix to the image file name?:No
    Text to append to the image name:
    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Interstellar_Project/0.wave1_data/1.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)
    Save with lossless compression?:Yes
