CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Interstellar_Project/0.wave1_data/2.cellprofiler_analysis
    Name of the file:wave1_loaddata_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigGasderminD
    Name the output image:CorrGasderminD
    Select the illumination function:IllumGasderminD
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:3|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:CorrDNA, CorrGasderminD
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
FlagImage:[module_num:4|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:BlurFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_CorrDNA
    Flag images based on low values?:Yes
    Minimum value:-2.15
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,65
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
DilateObjects:[module_num:6|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
    Select the input object:Nuclei
    Name the output object:DilatedNuclei
    Structuring element:disk,25

IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:DilatedNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:TranslocatedNuclei
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:CorrDNA, CorrGasderminD
    Select objects to measure:DilatedNuclei, Nuclei, TranslocatedNuclei

MeasureImageIntensity:[module_num:9|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notes:['NF1 used "Measure the intensity only from areas enclosed by objects" but for this I will measure whole image.']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
    Select images to measure:CorrDNA, CorrGasderminD
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectIntensityDistribution:[module_num:10|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
    Select images to measure:CorrDNA, CorrGasderminD
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:DilatedNuclei
    Object to use as center?:These objects
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    Select objects to measure:TranslocatedNuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureColocalization:[module_num:11|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
    Select images to measure:CorrDNA, CorrGasderminD
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:DilatedNuclei, Nuclei, TranslocatedNuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:12|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
    Select images to measure:CorrDNA, CorrGasderminD
    Measure within objects?:Yes
    Select objects to measure:DilatedNuclei, Nuclei, TranslocatedNuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:TranslocatedNuclei
    Select neighboring objects to measure:TranslocatedNuclei
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:DilatedNuclei, Nuclei, TranslocatedNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:16|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
    Select images to measure:CorrDNA, CorrGasderminD
    Select objects to measure:DilatedNuclei, Nuclei, TranslocatedNuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToDatabase:[module_num:17|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder sub-folder|Interstellar_Project/0.wave1_data/2.cellprofiler_analysis/analysis_output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:interstellar_wave1_dilate25.sqlite
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:DilatedNuclei,Nuclei,TranslocatedNuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:Interstellar_wave1
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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