CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Interstellar_Project/1.wave2_data/1.cellprofiler_ic_processing
    Name of the file:wave2_loaddata.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:OrigASC_Nothing
    Name the output image:IllumASC_Nothing
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:4|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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigASC_Spillover
    Name the output image:IllumASC_Spillover
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumDNA
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Interstellar_Project/1.wave2_data/1.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:IllumASC_Nothing
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumASC_Nothing
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Interstellar_Project/1.wave2_data/1.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:IllumMito
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumMito
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Interstellar_Project/1.wave2_data/1.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:IllumASC_Spillover
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumASC_Spillover
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Interstellar_Project/1.wave2_data/1.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
